PsychoPy2experiment version="1.82.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  color = $[-1.000,-1.000,-1.000]
  Window size (pixels) = [1366, 768]
  Full-screen window = True
  Experiment info = {u'gender': u'', u'age': u'', u'participant': u''}
  expName = RRT
  logging level = error
  Units = use prefs
  Save log file = False
  Screen = 1
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Routines
  Routine trial
    CodeComponent trials_code
      Begin Experiment:
        msg=""
      Begin Routine:
        # stimulus colors
        if trialtype == 1 or trialtype == 2:
             stimulusColor = "orange"
        elif trialtype >2:
             stimulusColor = "cyan"

        # correct and incorrect answers for each trialtype in each block
        if trialtype == 1: #true
            requiredAllowed = "i"
            requiredCorrect = "i"
            feedbackAllowed = "e"
            feedbackCorrect = "e"
        elif trialtype == 2: #false
            requiredAllowed = "e"
            requiredCorrect = "e"
            feedbackAllowed = "i"
            feedbackCorrect = "i"
        if blocks.thisN <= 2:
            if trialtype == 3: #self pos
                requiredAllowed = "i"
                requiredCorrect = "i"
                feedbackAllowed = "e"
                feedbackCorrect = "e"
            elif trialtype == 4: #self neg
                requiredAllowed = "e"
                requiredCorrect = "e"
                feedbackAllowed = "i"
                feedbackCorrect = "i"
            elif trialtype == 5: #self not pos
                requiredAllowed = "e"
                requiredCorrect = "e"
                feedbackAllowed = "i"
                feedbackCorrect = "i"
            elif trialtype == 6: #self not neg
                requiredAllowed = "i"
                requiredCorrect = "i"
                feedbackAllowed = "e"
                feedbackCorrect = "e"
        elif blocks.thisN >= 3:
            if trialtype == 3: #self pos
                requiredAllowed = "e"
                requiredCorrect = "e"
                feedbackAllowed = "i"
                feedbackCorrect = "i"
            elif trialtype == 4: #self neg
                requiredAllowed = "i"
                requiredCorrect = "i"
                feedbackAllowed = "e"
                feedbackCorrect = "e"
            elif trialtype == 5: #self not pos
                requiredAllowed = "i"
                requiredCorrect = "i"
                feedbackAllowed = "e"
                feedbackCorrect = "e"
            elif trialtype == 6: #self not neg
                requiredAllowed = "e"
                requiredCorrect = "e"
                feedbackAllowed = "i"
                feedbackCorrect = "i"
      Each Frame:
        if len(feedbackResponse.keys)<1:
            msg=""
        else:
            msg="X"
    TextComponent stimulusBox
      color [set every repeat] = $stimulusColor
      text [set every repeat] = $stimulus
      startVal [time (s)] = 0.3
      letterHeight = 0.1
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    KeyboardComponent requiredResponse
      correctAns = $requiredCorrect 
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys [set every repeat] = requiredAllowed
      startVal [time (s)] = 0.3
      store = first key
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    KeyboardComponent feedbackResponse
      correctAns = $feedbackCorrect 
      storeCorrect = True
      forceEndRoutine = False
      allowedKeys [set every repeat] = feedbackAllowed
      startVal [time (s)] = .3
      store = first key
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    TextComponent feedback
      color = red
      text [set every frame] = $msg
      pos = [0, -.5]
      startVal [time (s)] = .3
      letterHeight = 0.2
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    TextComponent trueText
      text [set every repeat] = $trueLabel
      pos = [0.75, 0.75]
      startVal [time (s)] = 0
      letterHeight = 0.1
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    TextComponent falseText
      text [set every repeat] = $falseLabel
      pos = [-0.75, 0.75]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine instruction
    CodeComponent block_code
      Begin Experiment:
        trialRows = ""
      Begin Routine:
        if blocks.thisN == 0:
            trialRows = "0:10"
            nBlockRepeats = 2   #10*2 = 20 trials
        elif blocks.thisN == 1:
            trialRows = "10:30"
            nBlockRepeats = 1   #20*1 = 20 trials
        elif blocks.thisN == 2:
            trialRows = "0:30"
            nBlockRepeats = 2   #20*1 = 60 trials
        elif blocks.thisN == 3:
            trialRows = "10:30"
            nBlockRepeats = 1   #20*1 = 20 trials
        elif blocks.thisN == 4:
            trialRows = "0:30"
            nBlockRepeats = 2   #10*4 = 60 trials
    TextComponent instructionsBox
      text [set every repeat] = $instructions
      startVal [time (s)] = 0.75
      letterHeight = 0.05
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    KeyboardComponent instructionsKey
      forceEndRoutine = True
      allowedKeys = 'e', 'i'
      startVal [time (s)] = 1.25
      store = nothing
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  Routine end
    TextComponent endBox
      text = End of the task
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.75
      letterHeight = 0.1
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Flow
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = instructions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'block': 1, u'instructions': u'In this response task will you have to react to words and propositions that are presented on the screen. In the next phase words will be presented in ORANGE.\n\nIt is your job to decide as soon as possible whether the word refers to TRUE or FALSE.\n\nPress the I key if the word is synonymous with TRUE.\nPress the E key if the word is a synonym for FALSE.\n\nIf you make a mistake, hit the correct key as soon as possible.\n\nPut your two index fingers on the E and I keys. Press either one to start.'},
      {u'block': 2, u'instructions': u"The next phase some propositions will be presented in BLUE.\nThese propositons are always statements about SELF ESTEEM.\n\nYou must respond AS IF 'I am good and not bad'.\n\nPress the I key when the statement is TRUE according to the above rule.\nPress the E key when the statement is FALSE according to the above rule.\n\nFor example:\nWhen the proposition 'I am valuable' appears, respond with the right response (TRUE).\nWhen the proposition 'I am worthless' appears, respond with the left response (FALSE).\n\nIf you make a mistake hit the correct key as soon as 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,
      {u'block': 3, u'instructions': u"Very good!\n\nThe next phase some words will be presented in ORANGE and some propositions in BLUE. These propositons are always statements about SELF ESTEEM.\n\nAgain, you must respond AS IF 'I am good and not bad'.\n\nPress the I key when the statement is TRUE according to the above rule.\nPress the E key when the statement is FALSE according to the above rule.\n\nThe rule that you must respond to the orange words does not change:\n\nPress the I key if the word is synonymous with TRUE.\nPress the E key if the word is a synonym for FALSE.\n\nIf you make a mista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,
      {u'block': 4, u'instructions': u"IMPORANT: THE RULE FOR THE BLUE STATEMENTS HAS NOW CHANGED.\n\nYou must respond AS IF 'I am bad and not good'.\n\nPress the I key when the statement is TRUE according to the above rule.\nPress the E key when the statement is FALSE according to the above rule.\n\nFor example:\nWhen the proposition 'I am valuable' appears, respond with the left response (FALSE).\nWhen the proposition 'I am worthless' appears, respond with the right response (TRUE).\n\nIf you make a mistake, hit the correct key as soon as possible.\n\nPut your two index fingers on the E and I keys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
    Routine instruction
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = stimuli.xlsx
      loopType = random
      nReps = nBlockRepeats
      Selected rows = $trialRows
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      conditions:
        [{u'feedbackResponseCorrect': u'e', u'stimulusColour': u'orange', u'falseLabel': u'FALSE', u'trialtype': 0, u'requiredResponseCorrect': u'i', u'stimulus': u'True', u'trueLabel': u'TRUE', u'requiredResponseAllowed': u'i', u'feedbackResponseAllowed': u'e'},
        {u'feedbackResponseCorrect': u'e', u'stimulusColour': u'orange', u'falseLabel': u'FALSE', u'trialtype': 0, u'requiredResponseCorrect': u'i', u'stimulus': u'Correct', u'trueLabel': u'TRUE', u'requiredResponseAllowed': u'i', u'feedbackResponseAllowed': u'e'},
        {u'feedbackResponseCorrect': u'e', u'stimulusColour': u'orange', u'falseLabel': u'FALSE', u'trialtype': 0, u'requiredResponseCorrect': u'i', u'stimulus': u'Right', u'trueLabel': u'TRUE', u'requiredResponseAllowed': u'i', u'feedbackResponseAllowed': u'e'},
        {u'feedbackResponseCorrect': u'e', u'stimulusColour': u'orange', u'falseLabel': u'FALSE', u'trialtype': 0, u'requiredResponseCorrect': u'i', u'stimulus': u'Accurate', u'trueLabel': u'TRUE', u'requiredResponseAllowed': u'i', u'feedbackResponseAllowed': u'e'},
        {u'feedbackResponseCorrect': u'e', u'stimulusColour': u'orange', u'falseLabel': u'FALSE', u'trialtype': 0, u'requiredResponseCorrect': u'i', u'stimulus': u'Confirm', u'trueLabel': u'TRUE', u'requiredResponseAllowed': u'i', u'feedbackResponseAllowed': u'e'}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
      Routine trial
    LoopTerminator trials
  LoopTerminator blocks
  Routine end
